PsychoPy2experiment version="1.90.2"
Settings
  expName = pilot_RL_with_extra_presentation
  Experiment info = {'participant': '99', 'response': 'keyboard'}
  Full-screen window = True
  Window size (pixels) = [1440, 900]
  Screen = 1
  Monitor = mbp
  Units = use prefs
  Data filename = u'logs/sub-%s/sub-%s_events' % (expInfo['participant'], expInfo['participant'])
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Routines
  Routine choice_trial
    CodeComponent feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
        feedback_txt_opacity = 1
      End Routine:
        if real_response.keys in (None, []):
            feedback_sign_opacity = 0
            feedback_txt_opacity = 1
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
        elif real_response.corr:
            feedback_txt = ''
            feedback_sign_opacity = 1
            feedback_txt_opacity = 0
            feedback_ori = 0
            feedback_color = 'Green'
        elif not real_response.corr:
            feedback_txt = ''
            feedback_sign_opacity = 1
            feedback_txt_opacity = 0
            feedback_ori = 45
            feedback_color = 'Red'
    ImageComponent first_face_img
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (8, 10)
      image [set every repeat] = $first_face
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    ImageComponent second_face_img
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      size = (8, 10)
      image [set every repeat] = $second_face
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    TextComponent response_prompt
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      text = Please respond
      letterHeight = 1
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    KeyboardComponent real_response
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.5
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correct_resp
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    PolygonComponent polygon
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine pre_rating
    ImageComponent pre_rating_img
      startVal [time (s)] = 0.5
      pos = (0, 1)
      size = (7.5, 10)
      image [set every repeat] = $stim_file
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    RatingScaleComponent pre_rating_scale
      startVal [time (s)] = 0.5
      marker = slider
      markerStart = 0
      showAccept = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.5
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  Routine feedback
    PolygonComponent feedback_sign
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent feedback_written_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      color [set every repeat] = $feedback_color
      opacity [set every repeat] = $feedback_txt_opacity
      text [set every repeat] = $feedback_txt
      letterHeight = 1
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  Routine instruct_RL_1
    CodeComponent practice_skip
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_1 = """
        Dit was het einde van fase één.

        In fase twee ga je een leer-taak doen.
        Die zullen we uitgebreid uitleggen en
        die zal je eerst even oefenen voordat je
        gaat beginnen aan de echte taak.

        (Druk op een willekeurig toets om verder te gaan.)
        """
        else:
            practice_skip_txt_1 = """
        Dit was het einde van fase één.

        In fase twee ga je weer een leer-taak doen,
        maar net iets anders dan in d eerste sessie.

        (Druk op een willekeurig toets om verder te gaan.)
        """
    TextComponent instruct_RL_1_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_1
      letterHeight = 0.4
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    KeyboardComponent instruct_RL_1_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine pre_rating_instruct
    CodeComponent ratingscale_switch
      Begin Routine:
        from custom_rating_scales import construct_rating_scale
        pre_rating_scale = construct_rating_scale(rating_attribute, win=win)
    TextComponent pre_rating_instruct_common
      startVal [time (s)] = 0.0
      pos = (0, 2)
      letterHeight = .4
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      text:
        Bij de gezichten die straks in beeld komen moet je
        de volgende vraag beantwoorden:
    TextComponent pre_rating_instruct_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      letterHeight = .5
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    TextComponent rating_press_to_continue
      startVal [time (s)] = 0.0
      pos = (0, -2)
      text [set every repeat] = $question_details
      letterHeight = .4
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    TextComponent click_to_continue
      startVal [time (s)] = 0.0
      pos = (0, -2.5)
      text = (Als de vraag duidelijk is, druk dan op een willekeurige toets om te beginnen.)
      letterHeight = 0.3
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    KeyboardComponent pre_rating_instruct_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine begin_real_RL
    CodeComponent code_2
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_3 = """Dit was de oefentaak. Je begon met 5 euro, maar je bent geeindigd met
        %.1f euro!

        Zoals je misschien wel gemerkt (geleerd)
        hebt, was Obama meer "waardevol" dan Clinton en
        was Bush meer "waardevol" dan Trump.

        Is alles duidelijk?
        Zo niet, laat de proefleider dit dan weten!

        (Druk op een willekeurige toets om verder te gaan.)""" % practice_money
        else:
            if session_name == 'plusmin':
                tmp_txt = '0.5 euro VERLIEST'
            else:
                tmp_txt = 'GEEN geld verliest'

            practice_skip_txt_3 = """
        Ter herinnering: het enige verschil met de eerste sessie is
        dat je deze keer %s bij een fout antwoord!

        (Druk op een willekeurige toets om verder te gaan.)
        """ % tmp_txt
    CodeComponent write_money_practice
      Begin Routine:
        with open(rewards_file, 'a') as rewards_file_f:
            rewards_file_f.write('Practice rewards: %.1f\n' % practice_money)
    TextComponent begin_real_RL_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_3
      letterHeight = 0.4
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    KeyboardComponent begin_real_RL_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_rating
    TextComponent instruct_rating_txt
      startVal [time (s)] = 0.0
      letterHeight = .4
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    KeyboardComponent instruct_rating_resp
      startVal [time (s)] = 0.0
      allowedKeys = 'f', 'j'
      store = nothing
      forceEndRoutine = True
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  Routine begin_session
    TextComponent begin_session_txt
      startVal [time (s)] = 0
      letterHeight = 0.4
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      text [set every repeat]:
        """Dit is het begin van de %s sessie!

        Eerst zal je een aantal gezichten beoordelen op een aantal eigenschappen.
        Voor elke beoordeling van een nieuwe eigenschap zullen we de beoordeling
        in meer detail uitleggen.

        (Druk op een willekeurige toets om te beginnen met fase 1!)""" % $number_str
    KeyboardComponent instruct_cont
      startVal [time (s)] = 0
      store = nothing
      forceEndRoutine = True
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  Routine thanks
    TextComponent thanks_txt
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      letterHeight = .5
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      text:
        Thank you for participating!
        This window will close automatically.
  Routine example_RL
    ImageComponent example_first_face
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      size = (8, 10)
      image [set every repeat] = $first_face
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    ImageComponent example_second_face
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1
      size = (8, 10)
      image [set every repeat] = $second_face
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    PolygonComponent example_fix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      opacity = .1
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine example_scale
    ImageComponent practice_image
      startVal [time (s)] = 0.0
      pos = (0, 0.5)
      size = (4, 4)
      image = stims/practice_stims/trump.jpg
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    TextComponent example_scale_hint
      startVal [time (s)] = 0.0
      pos = (0, 3)
      letterHeight = 0.4
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      text:
        ("f" = links, "j" = rechts, spatie = bevestig)
    RatingScaleComponent example_scale_1
      startVal [time (s)] = 0.0
      visualAnalogScale = True
      storeRating = False
      storeRatingTime = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.4
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      customize_everything:
        leftKeys=['f'],
        rightKeys=['j'],
        acceptKeys=['space'],
        mouseOnly=False,
        singleClick=False,
        labels=['Onaantrekkelijk', 'Gemiddeld', 'Aantrekkelijk'],
        low=-5,
        high=5,
        markerStart=0,
        showAccept=False,
        pos=(0, -0.5),
        scale='Hoe aantrekkelijk vind je deze persoon?',
        tickMarks=[-5, 0, 5],
        stretch=1.3
  Routine instruct_RL_3
    TextComponent instruct_RL_3_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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      text [set every repeat]:
        """In het begin van de taak weet je nog niet goed welke gezichten
        geassocieerd zijn met een relatief hoge kans op beloning
        (het winnen van geld), maar daar het is de bedoeling dat
        je daar met "trial-and-error" gedurende de taak achter komt.

        Ook is het zo dat een gezicht niet ALTIJD leidt tot beloning.
        Het kan bijvoorbeeld zo zijn dat een specifiek gezicht maar in
        80%% van de keuzes beloond wordt (en dus in 20%% van keuzes %s).

        (Druk op een willekeurige knop om verder te gaan.)""" % $RL_wrong_instruction_n
    KeyboardComponent instruct_RL_3_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_2
    TextComponent instruct_RL_2_txt_3
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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      text [set every repeat]:
        """Tijdens deze taak krijg je telkens twee gezichten
        naast elkaar te zien. Je moet daarna een van de twee
        gezichten kiezen.

        Om het LINKER gezicht te kiezen, druk je op de "f" toets.
        Om het RECHTER gezicht te kiezen, druk je op de "j" toets.

        Je hebt 2 seconden om te antwoorden.

        Na je keus krijg je feedback:
        Als je goed gekozen hebt, dan zie je een groen plus teken (+) en WIN je 0.5 euro.
        Als je fout gekozen hebt, dan zie je een rood kruis (x) en %s

        (Druk op een willekeurige knop om verder te gaan.)
        """ % $RL_wrong_instruction
    KeyboardComponent instruct_RL_2_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_2
    TextComponent welcome_txt_2
      startVal [time (s)] = 0.0
      letterHeight = .4
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      text:
        In de eerste fase ga je een aantal gezichten beoordelen
        op een aantal eigenschappen (aantrekkelijkheid, betrouwbaarheid, etc.).
        Dit duurt zo'n 5 minuten.

        (Druk op een willekeurige toets om verder te gaan.)
    KeyboardComponent welcome_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_3
    TextComponent welcome_txt_3
      startVal [time (s)] = 0.0
      letterHeight = .4
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      text:
        Je zal de gezichten beoordelen op een schaal.
        Je kan de pointer verplaatsen naar links met je "f" toets
        en naar rechts met de "j" toets op het toetenbord.

        Vervolgens kan je je keuze bevestigen met de
        spatie-balk. Er is geen tijdsdruk.

        (Druk op een willekeurige toets om een voorbeeld te zien.)
    KeyboardComponent instruct_cont_5
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine welcome_1
    CodeComponent setup_exp
      Begin Experiment:
        import os
        import os.path as op
        import pandas as pd
        import shutil
        from glob import glob

        # Define variables dependent on subject
        subj_info_df = pd.read_csv('subject_info.csv')
        sub_nr = expInfo['participant']
        this_subj_df = subj_info_df.query('subject_id == @sub_nr')

        RL_order = this_subj_df['RL_order'].values[0]
        face_gender = this_subj_df['face_gender'].values[0]

        # Create new subject dir in which to store stims/logs
        sub_dir = op.join('logs', 'sub-%s' % sub_nr)
        if not op.isdir(sub_dir):
            os.makedirs(sub_dir)

        # Remove existing stuff
        existing_imgs = glob(op.join(sub_dir, '*.png'))
        existing_csvs = glob(op.join(sub_dir, '*.csv'))
        _ = [os.remove(f) for f in existing_imgs]
        _ = [os.remove(f) for f in existing_csvs]

        rewards_file = op.join(sub_dir, 'rewards.txt')
        if op.isfile(rewards_file):
            os.remove(rewards_file)
        else:
            open(rewards_file, 'a').close()

        # Random random subset (only male or only female)
        all_stims = glob(op.join('stims', 'neutral_stims', '*.png'))
        subset_stims = []
        for s in all_stims:

            if face_gender == 'female' and face_gender in s:
                subset_stims.append(s)
            elif face_gender == 'male' and 'female' not in s:
                subset_stims.append(s)

        # Sample images and copy to dir
        random_stims = np.random.choice(subset_stims, 12, replace=False)
        random_stims = [random_stims[:6], random_stims[6:]]
        reward_prob = ['80', '70', '60', '40', '30', '20']

        session_df = dict(stim_csv=[], trial_csv=[], RL_wrong_instruction=[],
                          RL_wrong_instruction_n=[], feedback_txt_incorrect=[],
                          RL_session_notice=[], session_name=[])
        for i, this_RL_session in enumerate(RL_order.split('_')):

            learning_template = pd.read_csv('learning_template.csv')
            testing_template = pd.read_csv('testing_template.csv')

            # Loop over stimuli (6 faces for this session)
            stim_df = dict(stim_file=[], reward_prob=[])
            for ii, s in enumerate(random_stims[i]):
                this_reward_prob = reward_prob[ii]
                orig_name = op.basename(s).split('.')[0]
                new_name = '%s_rewardprob-%s_session-%s.png' % (orig_name, this_reward_prob, this_RL_session)
                new_file = op.join(sub_dir, new_name)
                shutil.copy(s, new_file)

                stim_df['stim_file'].append(new_file)
                stim_df['reward_prob'].append(reward_prob[i])

                learning_template = learning_template.replace('rewardprob-%s' % this_reward_prob, new_file)
                testing_template = testing_template.replace('rewardprob-%s' % this_reward_prob, new_file)

            stim_df = pd.DataFrame(stim_df)
            stim_file = op.join(sub_dir, 'stims_session-%s.csv' % this_RL_session)
            stim_df.to_csv(stim_file, index=False)

            learning_file = op.join(sub_dir, 'trials_phase-learning_session-%s.csv' % this_RL_session)
            learning_template.to_csv(learning_file, index=False)
            testing_file = op.join(sub_dir, 'trials_phase-testing_session-%s.csv' % this_RL_session)
            testing_template.to_csv(testing_file, index=False)
            session_df['trial_csv'].append(learning_file)
            session_df['stim_csv'].append(stim_file)
            session_df['session_name'].append(this_RL_session)

            if this_RL_session == 'plusmin':
                session_df['RL_wrong_instruction'].append('VERLIES je 0.5 euro.')
                session_df['RL_wrong_instruction_n'].append('gestraft wordt, doordat je 0.5 euro verliest.')
                session_df['feedback_txt_incorrect'].append('(0.5 euro verloren)')
            else:
                session_df['RL_wrong_instruction'].append('win je niks.')
                session_df['RL_wrong_instruction_n'].append('dat je niks wint.')
                session_df['feedback_txt_incorrect'].append('(0 euro gewonnen)')

            if i == 0:
                session_df['RL_session_notice'].append(' ')
            elif i == 1 and this_RL_session == 'plusmin':
                session_df['RL_session_notice'].append("Let op: in de eerste sessie won je niks als je keus fout was, "
                                                       "maar in deze sessie VERLIES je 0.5 euro als je het fout hebt!")
            elif i == 1 and this_RL_session == 'plusneu':
                session_df['RL_session_notice'].append("Let op: in de eerste sessie verloor je 0.5 euro als je keus fout was, "
                                                       "maar in deze sessie win/verlies je NIKS als je het fout hebt!")

        session_df['number_str'] = ['eerste', 'tweede']
        session_df['practice_reps'] = [1, 0]
        session_df = pd.DataFrame(session_df)
        session_file = op.join(sub_dir, 'sessions_phase-learning.csv')
        session_df.to_csv(session_file, index=False)

        # Check sequence
        if RL_order == 'plusmin_plusneu':
            pass
        elif RL_order == 'plusneu_plusmin':
            pass
        else:
            raise ValueError("Cannot determine RL_order (should be 'plusmin_plusneu' or 'plusneu_plusmin')!")
    TextComponent welcome_txt_1
      startVal [time (s)] = 0.0
      letterHeight = .4
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      text:
        Welkom bij dit experiment!

        Dit experiment bestaat uit twee "sessies" met elk drie fases.
        In totaal duurt het experiment zo'n X minuten.

        Voordat we gaan beginnen, krijg je meer uitleg over wat je moet
        doen tijdens de drie verschillende fases van het onderzoek.

        (Druk op een willekeurige toets om verder te gaan.)
    KeyboardComponent welcome_resp_1
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_5
    CodeComponent practice_switch
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt = """
        Om het nog iets moeilijker te maken, krijg je straks
        niet één combinatie van 2 gezichten, maar DRIE combinaties
        van 2 gezichten! Je moet dus van drie combinaties proberen
        te leren welke van de twee het meest "waardevolle" gezicht is!

        Om te checken of je het snapt, ga je dit leer-taakje even oefenen.
        Je krijg twee combinaties van gezichten te zien:

        1. Barack Obama vs. Bill Clinton,
        2. Donald Trump vs. George Bush

        De oefenfase duurt ongeveer 5 minuutjes. Ter herinnering:
        Om het LINKER gezicht te kiezen, druk op de "f" toets.
        Om het RECHTER gezicht te kiezen, druk op de "j" toets.

        (Druk op een willekeurige knop om te beginnen met de oefenronde!)
        """
            practice_reps = 1
        else:
            practice_skip_txt = """We slaan de oefenronde deze keer over.

        (Druk op een willekeurige toets om verder te gaan.)"""
            practice_reps = 0
    TextComponent instruct_RL_5_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt
      letterHeight = 0.4
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    KeyboardComponent instruct_RL_5_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine instruct_RL_4
    CodeComponent code
      Begin Routine:
        if number_str == 'eerste':
            practice_skip_txt_2 = """
        Na de feedback krijg je de twee gezichten te zien,
        maar nu één voor één. Hier hoef je NIKS bij te doen,
        alleen maar de gezichten te bekijken. Het is ook
        niet relevant voor de taak en bevat geen informatie
        over de waarde van de gezichten.

        (Druk op een willekeurige toets om verder te gaan.)
        """
        else:
            practice_skip_txt_2 = """
        Na de feedback krijg je wederom de twee gezichten één voor één te zien.
        Hier hoef je net zoals in de eerste sessie NIKS bij te doen,

        (Druk op een willekeurige toets om verder te gaan.)
        """
    TextComponent instruct_RL_4_txt
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_2
      letterHeight = 0.4
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    KeyboardComponent instruct_RL_4_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine practice_RL_trial
    CodeComponent practice_feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
      End Routine:
        if practice_response.keys in (None, []):
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
            feedback_sign_opacity = 0
        elif practice_response.corr:
            feedback_txt = '(0.5 euro gewonnen)'
            feedback_ori = 0
            feedback_color = 'Green'
            feedback_sign_opacity = 1
        elif not practice_response.corr:
            feedback_txt = feedback_txt_incorrect
            feedback_ori = 45
            feedback_color = 'Red'
            feedback_sign_opacity = 1
    ImageComponent practice_left_face
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (-4, 0)
      size = (4, 4)
      image [set every repeat] = $left_face
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    ImageComponent practice_right_face
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (4, 0)
      size = (4, 4)
      image [set every repeat] = $right_face
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    TextComponent practice_response_prompt
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (0, -4)
      letterHeight = .3
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      text:
        Kies links ("f") of rechts ("j").
        Je hebt 2 seconden om te antwoorden!
    KeyboardComponent practice_response
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correct_resp
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    PolygonComponent fix_practice
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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    CodeComponent practice_money_tracker
      Begin Experiment:
        practice_money = 5
      End Routine:
        if practice_response.keys in (None, []):
            practice_money += 0
        else:
            if practice_response.corr:
                practice_money += 0.5
            else:
                if session_name == 'plusneu':
                    practice_money += 0
                elif session_name == 'plusneg':
                    practice_money -= 0.5
  Routine practice_RL_feedback
    PolygonComponent fix_during_feedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      size = (0.1, 0.1)
      nVertices = 1000
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = 0.1
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    PolygonComponent practice_feedback_sign
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent practice_feedback_written_txt
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1.0
      color [set every repeat] = $feedback_color
      pos = (0, -1)
      text [set every repeat] = $feedback_txt
      letterHeight = .4
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  Routine practice_RL_views
    ImageComponent practice_left_face_show
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      size = (4, 4)
      image [set every repeat] = $left_face
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    ImageComponent practice_right_face_show
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      size = (4, 4)
      image [set every repeat] = $right_face
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    PolygonComponent fix_practice_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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    TextComponent not_relevant
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 12
      pos = (0, 3)
      text = (Deze 'fase' is niet relevant ...)
      letterHeight = 0.3
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  Routine real_RL_trial
    CodeComponent real_feedback_switch
      Begin Experiment:
        feedback_ori = 0
        feedback_txt = 'Not set!'
        feedback_color = 'White'
        feedback_sign_opacity = 0
        counter_RL = 1
      End Routine:
        if real_response2.keys in (None, []):
            feedback_txt = 'Too slow!'
            feedback_color = 'White'
            feedback_sign_opacity = 0
        elif real_response2.corr:
            feedback_txt = '(0.5 euro gewonnen)'
            feedback_ori = 0
            feedback_color = 'Green'
            feedback_sign_opacity = 1
        elif not real_response2.corr:
            feedback_txt = feedback_txt_incorrect
            feedback_ori = 45
            feedback_color = 'Red'
            feedback_sign_opacity = 1
    ImageComponent real_left_face
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (-4, 0)
      size = (7.5, 10)
      image [set every repeat] = $left_face
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    ImageComponent real_right_face
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (4, 0)
      size = (7.5, 10)
      image [set every repeat] = $right_face
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    TextComponent real_response_prompt
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      pos = (0, -4)
      text = Kies links ("f") of rechts ("j")
      letterHeight = .3
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    KeyboardComponent real_RL_response
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $correct_resp
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    PolygonComponent fix_real
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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    CodeComponent real_money_tracker
      Begin Experiment:
        real_money = dict(plusmin=5, plusneu=5)
      End Routine:
        if real_response2.corr in (None, []):
            real_money[session_name] += 0
        else:
            if real_response2.corr:
                real_money[session_name] += 0.5
            else:
                if session_name == 'plusneu':
                    real_money[session_name] += 0
                elif session_name == 'plusneg':
                    real_money[session_name] -= 0.5
  Routine real_RL_feedback
    PolygonComponent fix_during_feedback_real
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      size = (0.1, 0.1)
      nVertices = 1000
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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    PolygonComponent real_feedback_sign
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1.0
      opacity [set every repeat] = $feedback_sign_opacity
      size = (1, 1)
      ori [set every repeat] = $feedback_ori
      shape = cross
      fillColor [set every repeat] = $feedback_color
      lineColor [set every repeat] = $feedback_color
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    TextComponent real_feedback_written_txt
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 1
      color [set every repeat] = $feedback_color
      pos = (0, -1)
      text [set every repeat] = $feedback_txt
      letterHeight = .4
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  Routine real_RL_views
    ImageComponent real_left_face_show
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      size = (7.5, 10)
      image [set every repeat] = $left_face
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    ImageComponent real_right_face_show
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      size = (7.5, 10)
      image [set every repeat] = $right_face
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    PolygonComponent fix_real2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = .1
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  Routine instruct_RL_2_2
    TextComponent instruct_RL_2_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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      text [set every repeat]:
        """Je begint met 5 euro, maar dit bedrag kan je dus
        opbouwen door te leren welke gezichten gekoppeld zijn
        met een hogere kans op beloning. Het uiteindelijke bedrag
        mag je ook daadwerkelijk mee naar huis nemen!

        %s

        (Druk op een willekeurige toets om verder te gaan.)
        """ % $RL_session_notice
    KeyboardComponent instruct_RL_2_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine begin_real_RL2
    CodeComponent code_3
      Begin Routine:
        if number_str == 'eerste':

            practice_skip_txt_4 = """
        Als alles duidelijk is, dan kan je beginnen met de echte leer-taak!

        In plaats van Amerikaanse (ex)presidenten, krijg je nu dezelfde
        gezichten te zien als die je beoordeeld hebt in de vorige fase.
        In totaal krijg je DRIE combinaties van twee gezichten.

        In tegenstelling tot bij de oefentaak, mag je het bedrag dat je
        hierbij verdiend WEL mee naar huis nemen.

        Let op, de echte leer-taak duurt ongeveer 40 minuten.
        Succes!

        (Druk op een toets om te beginnen met de echte taak.)
        """
        else:
            practice_skip_txt_4 = """
        (Druk op een willekeurige toets om te beginnen met de echte taak.)
        """
    TextComponent begin_real_RL_txt_2
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_skip_txt_4
      letterHeight = 0.4
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    KeyboardComponent begin_real_RL_continue_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine overview_money
    TextComponent overview_money_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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      text [set every repeat]:
        """Deze sessie heb je in totaal %.1f euro verdiend!

        (Druk op een toets om door te gaan.)
        """ % $real_money[$session_name]
    KeyboardComponent overview_money_resp
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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    CodeComponent write_reward
      End Routine:
        with open(rewards_file, 'a') as rewards_file_f:
            rewards_file_f.write('%s rewards: %.1f\n' % (session_name, real_money[session_name]))
  Routine pause_RL
    CodeComponent pause_switch
      Begin Routine:
        if (real_trials.thisN + 1) % 20 != 0:
            continueRoutine = False
    TextComponent pause_txt
      startVal [time (s)] = 0.0
      letterHeight = 0.4
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      text [set every repeat]:
        """Je kan even pauze nemen als je wilt!
        Het bedrag dat je deze sessie tot nu toe hebt verdiend: %.1f euro

        (Druk op een toets om weer verder te gaan.)""" % $real_money[$session_name]
    KeyboardComponent key_resp_2
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine post_rating_instruct
    CodeComponent ratingscale_switch_2
      Begin Routine:
        from custom_rating_scales import construct_rating_scale
        post_rating_scale = construct_rating_scale(rating_attribute, win=win)
    TextComponent post_rating_instruct_common
      startVal [time (s)] = 0.0
      pos = (0, 2)
      letterHeight = .4
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      text:
        Bij de gezichten die straks in beeld komen moet je
        de volgende vraag beantwoorden:
    TextComponent pre_rating_instruct_txt_2
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      letterHeight = .5
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    TextComponent rating_press_to_continue_2
      startVal [time (s)] = 0.0
      pos = (0, -2)
      text [set every repeat] = $question_details
      letterHeight = .4
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    TextComponent click_to_continue_2
      startVal [time (s)] = 0.0
      pos = (0, -2.5)
      text = (Als de vraag duidelijk is, druk dan op een willekeurige toets om te beginnen.)
      letterHeight = 0.3
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    KeyboardComponent post_rating_instruct_continue
      startVal [time (s)] = 0.0
      store = nothing
      forceEndRoutine = True
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  Routine post_rating
    ImageComponent post_rating_img
      startVal [time (s)] = 0.5
      pos = (0, 1)
      size = (7.5, 10)
      image [set every repeat] = $stim_file
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    RatingScaleComponent post_rating_scale
      startVal [time (s)] = 0.5
      marker = slider
      markerStart = 0
      showAccept = False
      forceEndRoutine = True
      size = 1.0
      pos = 0, -0.5
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  Routine pre_fix_2
    PolygonComponent pre_fix_thingie
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      pos = (0.0, 0.0)
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = 0.1
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  Routine pre_fix
    PolygonComponent pre_fix_thingie_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      pos = (0.0, 0.0)
      size = (0.1, 0.1)
      nVertices = 100
      shape = regular polygon...
      fillColor = $[1,1,1]
      lineWidth = 0.1
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Flow
  Routine welcome_1
  Routine welcome_2
  Routine welcome_3
  Routine example_scale
  LoopInitiator session_loop loopType="TrialHandler"
    nReps = 1
    conditionsFile = $session_file
    loopType = sequential
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    Routine begin_session
    LoopInitiator pre_rating_loop loopType="TrialHandler"
      nReps = 0
      conditionsFile = ratings.csv
      loopType = random
      isTrials = False
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      conditions:
        [OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'valence'), ('question', 'Hoe prettig/onprettig ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'arousal'), ('question', 'Hoe intens ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'attractiveness'), ('question', 'Hoe aantrekkelijk vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'trustworthiness'), ('question', 'Hoe betrouwbaar vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'dominance'), ('question', 'Hoe dominant vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'post_rating'), ('rating_attribute', 'valence'), ('question', 'Hoe prettig/onprettig ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')])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
      Routine pre_rating_instruct
      LoopInitiator pre_neutral_face_loop loopType="TrialHandler"
        nReps = 1
        conditionsFile = $stim_csv
        loopType = random
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        Routine pre_rating
      LoopTerminator pre_neutral_face_loop
    LoopTerminator pre_rating_loop
    Routine instruct_RL_1
    Routine instruct_RL_2
    Routine instruct_RL_2_2
    Routine instruct_RL_3
    Routine instruct_RL_5
    Routine pre_fix
    LoopInitiator practice_trials loopType="TrialHandler"
      nReps = $practice_reps
      conditionsFile = practice_trials.csv
      loopType = random
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      conditions:
        [OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/obama.jpg'), ('right_face', 'stims/practice_stims/clinton.jpg'), ('correct_resp', 'f'), ('correct_face', 'stims/practice_stims/obama.jpg')]),
        OrderedDict([('phase', 'practice'), ('condition', '90_vs_10'), ('left_face', 'stims/practice_stims/clinton.jpg'), ('right_face', 'stims/practice_stims/obama.jpg'), ('correct_resp', 'j'), ('correct_face', 'stims/practice_stims/obama.jpg')])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
      Routine practice_RL_trial
      Routine practice_RL_feedback
    LoopTerminator practice_trials
    Routine begin_real_RL
    Routine begin_real_RL2
    Routine pre_fix_2
    LoopInitiator real_trials loopType="TrialHandler"
      nReps = 1
      conditionsFile = $trial_csv
      loopType = random
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      Routine real_RL_trial
      Routine real_RL_feedback
      Routine pause_RL
    LoopTerminator real_trials
    Routine overview_money
    LoopInitiator post_rating_loop loopType="TrialHandler"
      nReps = 1
      conditionsFile = ratings.csv
      loopType = random
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      conditions:
        [OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'valence'), ('question', 'Hoe prettig/onprettig ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'arousal'), ('question', 'Hoe intens ervaar jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'attractiveness'), ('question', 'Hoe aantrekkelijk vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'trustworthiness'), ('question', 'Hoe betrouwbaar vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')]),
        OrderedDict([('phase', 'pre_rating'), ('rating_attribute', 'dominance'), ('question', 'Hoe dominant vind jij dit gezicht?'), ('question_details', 'Dit is een placeholder. Hier moet nog een uitleg komen over de vraag.')])]
      Routine post_rating_instruct
      LoopInitiator post_neutral_face_loop loopType="TrialHandler"
        nReps = 1
        conditionsFile = $stim_csv
        loopType = random
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        Routine post_rating
      LoopTerminator post_neutral_face_loop
    LoopTerminator post_rating_loop
  LoopTerminator session_loop
  Routine thanks
